PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = $[-1,-1,-1]
  expName = AttRewPy1
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent fixation_small
      image = images/Fix_Dot.png
      size = (0.005, 0.005)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = .266
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    ImageComponent fixation_large
      image = images/Fix_Dot.png
      size = (0.01, 0.01)
      startVal [time (s)] = 0.766
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    ImageComponent targ
      image [set every repeat] = $targ_img
      pos [set every repeat] = $(targ_x, targ_y)
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = .660
      texture resolution = 512
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    ImageComponent dist1
      image [set every repeat] = $dist1_img
      pos [set every repeat] = $(dist1_x, dist1_y)
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = .660
      texture resolution = 512
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    ImageComponent dist2
      image [set every repeat] = $dist2_img
      pos [set every repeat] = $(dist2_x, dist2_y)
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = .660
      texture resolution = 512
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    ImageComponent dist3
      image [set every repeat] = $dist3_img
      pos [set every repeat] = $(dist3_x, dist3_y)
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.660
      texture resolution = 512
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    ImageComponent dist4
      image [set every repeat] = $dist4_img
      pos [set every repeat] = $(dist4_x, dist4_y)
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.660
      texture resolution = 512
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    ImageComponent dist5
      image [set every repeat] = $dist5_img
      pos [set every repeat] = $(dist5_x, dist5_y)
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = .660
      texture resolution = 512
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space','a','l'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditions = [OrderedDict([('targ_img', 'images/Circle_Red_Hor.png'), ('targ_x', 0), ('targ_y', 0.5), ('dist1_img', 'images/PtdSq_Red_Hor.png'), ('dist1_x', 0.25), ('dist1_y', 0.25), ('dist2_img', 'images/Square_Red_Hor.png'), ('dist2_x', 0.25), ('dist2_y', -0.25), ('dist3_img', 'images/Hexagon_Red_Hor.png'), ('dist3_x', 0), ('dist3_y', -0.5), ('dist4_img', 'images/Pentagon_Red_Hor.png'), ('dist4_x', -0.25), ('dist4_y', -0.25), ('dist5_img', 'images/Shield_Red_Hor.png'), ('dist5_x', -0.25), ('dist5_y', 0.25)])]
    conditionsFile = AttRewPy1_Conditions.xlsx
    loopType = random
    nReps = 1
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    Routine trial
  LoopTerminator trials
