PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = $[-1,-1,-1]
  expName = AttRewPy1
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent fixation_small
      image = images/Fix_Dot.png
      size = (0.005, 0.005)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = .266
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    ImageComponent fixation_large
      image = images/Fix_Dot.png
      size = (0.01, 0.01)
      startVal [time (s)] = 0.766
      stopVal [time (s)] = 4
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    ImageComponent targ
      image [set every repeat] = $targ_img
      pos [set every repeat] = $(targ_x, targ_y)
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = .660
      texture resolution = 512
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    ImageComponent dist1
      image [set every repeat] = $dist1_img
      pos [set every repeat] = $(dist1_x, dist1_y)
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = .660
      texture resolution = 512
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    ImageComponent dist2
      image [set every repeat] = $dist2_img
      pos [set every repeat] = $(dist2_x, dist2_y)
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = .660
      texture resolution = 512
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    ImageComponent dist3
      image [set every repeat] = $dist3_img
      pos [set every repeat] = $(dist3_x, dist3_y)
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.660
      texture resolution = 512
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    ImageComponent dist4
      image [set every repeat] = $dist4_img
      pos [set every repeat] = $(dist4_x, dist4_y)
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.660
      texture resolution = 512
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    ImageComponent dist5
      image [set every repeat] = $dist5_img
      pos [set every repeat] = $(dist5_x, dist5_y)
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = .660
      texture resolution = 512
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space','a','l'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [time (s)] = 4
      storeCorrect = True
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  Routine trialFeedbackN
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        msg='doh!'#if this comes up we forgot to update the msg!
        msgColor = 'blue'
        FBsound = '2329__Jovica__STAB_004_mastered_16_bit.wav'
        scoreMsg = 0
      Begin Routine:
        if not key_resp.keys :
            msg="No Response"
            msgColor = 'red'
            msgDur = 3
            FBsound = 'NonMon1_Incorrect.wav'
            trialScore = 0
            scoreMsg = "0"
            lowRewLoop = 0
            highRewLoop = 0
        elif key_resp.corr: #stored on last run routine
            msg="CORRECT"
            msgColor = 'white'
            msgDur = 1
            FBsound = 'NonMon1_Correct.wav'
            trialScore = 2000 - round(key_resp.rt*1000)*2
            scoreMsg = str(trialScore)
            lowRewLoop = 1
            highRewLoop = 1
        else:
            msg="INCORRECT"
            msgColor = 'white'
            msgDur = 3
            FBsound = 'NonMon1_Incorrect.wav'
            trialScore = 0
            scoreMsg = "0"
            lowRewLoop = 0
            highRewLoop = 0
    TextComponent FeedbackText
      color [set every repeat] = $msgColor
      letterHeight = 0.02
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $msgDur
      text [set every repeat] = $msg
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    TextComponent ScoreText
      color [set every repeat] = $msgColor
      letterHeight = 0.02
      pos = (0, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $msgDur
      text [set every repeat] = $scoreMsg + ' points'
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    ImageComponent fixation_large_2
      image = images/Fix_Dot.png
      size = (0.01, 0.01)
      startVal [time (s)] = 0
      stopVal [time (s)] = $msgDur
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    ImageComponent targ_2
      image [set every repeat] = $targ_img
      pos [set every repeat] = $(targ_x, targ_y)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $msgDur
      texture resolution = 512
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    ImageComponent dist1_2
      image [set every repeat] = $dist1_img
      pos [set every repeat] = $(dist1_x, dist1_y)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $msgDur
      texture resolution = 512
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    ImageComponent dist2_2
      image [set every repeat] = $dist2_img
      pos [set every repeat] = $(dist2_x, dist2_y)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $msgDur
      texture resolution = 512
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    ImageComponent dist3_2
      image [set every repeat] = $dist3_img
      pos [set every repeat] = $(dist3_x, dist3_y)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $msgDur
      texture resolution = 512
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    ImageComponent dist4_2
      image [set every repeat] = $dist4_img
      pos [set every repeat] = $(dist4_x, dist4_y)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $msgDur
      texture resolution = 512
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    ImageComponent dist5_2
      image [set every repeat] = $dist5_img
      pos [set every repeat] = $(dist5_x, dist5_y)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $msgDur
      texture resolution = 512
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    SoundComponent FeedbackSound
      sound = $FBsound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine trialFeedbackL
    TextComponent LowText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = LowRewLoop
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  Routine trialFeedbackH
    TextComponent highText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = HighRewLoop
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = AttRewPy1_Conditions_EMP.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'targ_img': 'images/Circle_Red_Hor.png', 'targ_x': 0, 'targ_y': 0.125, 'dist1_img': 'images/Circle_Blue_Rt.png', 'dist1_x': 0.1, 'dist1_y': 0.05, 'dist2_img': 'images/Circle_Cyan_Lt.png', 'dist2_x': 0.1, 'dist2_y': -0.05, 'dist3_img': 'images/Circle_Magenta_Lt.png', 'dist3_x': 0, 'dist3_y': -0.125, 'dist4_img': 'images/Circle_Orange_Rt.png', 'dist4_x': -0.1, 'dist4_y': -0.05, 'dist5_img': 'images/Circle_Purple_Rt.png', 'dist5_x': -0.1, 'dist5_y': 0.05, 'corr_ans': 'a', 'rewCond': 'n'},
      {'targ_img': 'images/Circle_Red_Ver.png', 'targ_x': 0, 'targ_y': 0.125, 'dist1_img': 'images/Circle_Cyan_Lt.png', 'dist1_x': 0.1, 'dist1_y': 0.05, 'dist2_img': 'images/Circle_Magenta_Lt.png', 'dist2_x': 0.1, 'dist2_y': -0.05, 'dist3_img': 'images/Circle_Orange_Rt.png', 'dist3_x': 0, 'dist3_y': -0.125, 'dist4_img': 'images/Circle_Purple_Rt.png', 'dist4_x': -0.1, 'dist4_y': -0.05, 'dist5_img': 'images/Circle_Yellow_Rt.png', 'dist5_x': -0.1, 'dist5_y': 0.05, 'corr_ans': 'l', 'rewCond': 'h'},
      {'targ_img': 'images/Circle_Green_Hor.png', 'targ_x': 0, 'targ_y': 0.125, 'dist1_img': 'images/Circle_Blue_Rt.png', 'dist1_x': 0.1, 'dist1_y': 0.05, 'dist2_img': 'images/Circle_Purple_Lt.png', 'dist2_x': 0.1, 'dist2_y': -0.05, 'dist3_img': 'images/Circle_Yellow_Rt.png', 'dist3_x': 0, 'dist3_y': -0.125, 'dist4_img': 'images/Circle_Cyan_Rt.png', 'dist4_x': -0.1, 'dist4_y': -0.05, 'dist5_img': 'images/Circle_Yellow_Rt.png', 'dist5_x': -0.1, 'dist5_y': 0.05, 'corr_ans': 'a', 'rewCond': 'l'},
      {'targ_img': 'images/Circle_Green_Ver.png', 'targ_x': 0, 'targ_y': 0.125, 'dist1_img': 'images/Circle_Orange_Rt.png', 'dist1_x': 0.1, 'dist1_y': 0.05, 'dist2_img': 'images/Circle_Yellow_Rt.png', 'dist2_x': 0.1, 'dist2_y': -0.05, 'dist3_img': 'images/Circle_Magenta_Lt.png', 'dist3_x': 0, 'dist3_y': -0.125, 'dist4_img': 'images/Circle_Blue_Rt.png', 'dist4_x': -0.1, 'dist4_y': -0.05, 'dist5_img': 'images/Circle_Cyan_Rt.png', 'dist5_x': -0.1, 'dist5_y': 0.05, 'corr_ans': 'l', 'rewCond': 'n'}]
    Routine trial
    Routine trialFeedbackN
    LoopInitiator LowRewardLoop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = lowRewLoop
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      Routine trialFeedbackL
    LoopTerminator LowRewardLoop
    LoopInitiator HighRewardLoop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = highRewLoop
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      Routine trialFeedbackH
    LoopTerminator HighRewardLoop
  LoopTerminator trials
